# /gate/degrader/attachCrystalSD
/gate/TRACKER_Absorber/attachCrystalSD
/gate/TRACKER_Glue1/attachCrystalSD
/gate/TRACKER_ALPIDE/attachCrystalSD
/gate/TRACKER_AirGap/attachCrystalSD
/gate/TRACKER_TopFDI1/attachCrystalSD
/gate/TRACKER_TopFDI2/attachCrystalSD
/gate/TRACKER_Glue2/attachCrystalSD
/gate/TRACKER_Spacer/attachCrystalSD
/gate/TRACKER_Glue3/attachCrystalSD
/gate/TRACKER_BottomFDI1/attachCrystalSD
/gate/TRACKER_BottomFDI2/attachCrystalSD
/gate/TRACKER_Glue4/attachCrystalSD
/gate/Layer/attachCrystalSD
/gate/Absorber/attachCrystalSD
/gate/Glue1/attachCrystalSD
/gate/Spacer1/attachCrystalSD
/gate/Glue2/attachCrystalSD
/gate/ALPIDE/attachCrystalSD
/gate/AirGap/attachCrystalSD
/gate/TopFDI1/attachCrystalSD
/gate/TopFDI2/attachCrystalSD
/gate/Glue3/attachCrystalSD
/gate/Spacer2/attachCrystalSD
/gate/Glue4/attachCrystalSD
/gate/BottomFDI1/attachCrystalSD
/gate/BottomFDI2/attachCrystalSD
/gate/Glue5/attachCrystalSD
