/gate/scanner/daughters/name simplified
/gate/scanner/daughters/insert box
/gate/simplified/geometry/setXLength 40000.  um
/gate/simplified/geometry/setYLength 40000.  um
/gate/simplified/geometry/setZLength  3974.9 um
# placement: -number of layers * 3975 / 2
/gate/simplified/placement/setTranslation 0. 0. 79500. um
/gate/simplified/setMaterial Vacuum
/gate/simplified/vis/setVisible false

/gate/simplified/daughters/name layer
/gate/simplified/daughters/insert box
/gate/layer/geometry/setXLength 38900.  um
/gate/layer/geometry/setYLength 19149.7 um
/gate/layer/geometry/setZLength 900.  um
/gate/layer/placement/setTranslation 0. 9574.75 -1537.5 um # center on proximal side
/gate/layer/setMaterial Vacuum
/gate/layer/vis/setVisible false

/gate/layer/daughters/name glue_1
/gate/layer/daughters/insert box
/gate/glue_1/geometry/setXLength 38900.  um
/gate/glue_1/geometry/setYLength 19149.5 um
/gate/glue_1/geometry/setZLength   39.9 um
/gate/glue_1/placement/setTranslation 0. 0. -430. um
/gate/glue_1/setMaterial Glue
/gate/glue_1/vis/setColor yellow
/gate/glue_1/vis/forceWireframe

/gate/layer/daughters/name pcb
/gate/layer/daughters/insert box
/gate/pcb/geometry/setXLength 38900.  um
/gate/pcb/geometry/setYLength 19149.5 um
/gate/pcb/geometry/setZLength  159.9  um
/gate/pcb/placement/setTranslation 0. 0. -330. um
/gate/pcb/setMaterial PCB
/gate/pcb/vis/setColor green
/gate/pcb/vis/forceWireframe

/gate/layer/daughters/name glue_2
/gate/layer/daughters/insert box
/gate/glue_2/geometry/setXLength 38900.  um
/gate/glue_2/geometry/setYLength 19149.5 um
/gate/glue_2/geometry/setZLength   39.9 um
/gate/glue_2/placement/setTranslation 0. 0. -230. um
/gate/glue_2/setMaterial Glue
/gate/glue_2/vis/setColor yellow
/gate/glue_2/vis/forceWireframe

/gate/layer/daughters/name passive
/gate/layer/daughters/insert box
/gate/passive/geometry/setXLength 38900.  um
/gate/passive/geometry/setYLength 19149.5 um
/gate/passive/geometry/setZLength   105.9 um # was 89.9, then +16 = 105.9
/gate/passive/placement/setTranslation 0. 0. -157. um # was -165. um, then + 8 = 157.
/gate/passive/setMaterial Silicon
/gate/passive/vis/setColor green
/gate/passive/vis/forceWireframe

/gate/layer/daughters/name chip
/gate/layer/daughters/insert box
/gate/chip/geometry/setXLength 38900.  um
/gate/chip/geometry/setYLength 19149.5 um
/gate/chip/geometry/setZLength  13.9 um # was 29.9, then -16 = 13.9
/gate/chip/placement/setTranslation 0. 0. -97. um # was -105, then +8 = -97
/gate/chip/setMaterial Silicon
/gate/chip/vis/setColor red

/gate/layer/daughters/name gap_1
/gate/layer/daughters/insert box
/gate/gap_1/geometry/setXLength 38900.  um
/gate/gap_1/geometry/setYLength 19149.5 um
/gate/gap_1/geometry/setZLength  169.9 um
/gate/gap_1/placement/setTranslation 0. 0. -5. um
/gate/gap_1/setMaterial Air
/gate/gap_1/vis/setVisible false

/gate/layer/daughters/name filler
/gate/layer/daughters/insert box
/gate/filler/geometry/setXLength 38900.  um
/gate/filler/geometry/setYLength 19149.5 um
/gate/filler/geometry/setZLength  299.9 um
/gate/filler/placement/setTranslation 0. 0. 230. um
/gate/filler/setMaterial {material}
/gate/filler/vis/setColor grey

/gate/layer/daughters/name glue_3
/gate/layer/daughters/insert box
/gate/glue_3/geometry/setXLength 38900.  um
/gate/glue_3/geometry/setYLength 19149.5 um
/gate/glue_3/geometry/setZLength  69.9  um
/gate/glue_3/placement/setTranslation 0. 0. 415. um
/gate/glue_3/setMaterial Glue
/gate/glue_3/vis/setColor yellow
/gate/glue_3/vis/forceWireframe

/gate/simplified/daughters/name absorber_1
/gate/simplified/daughters/insert box
/gate/absorber_1/geometry/setXLength 38900.  um
/gate/absorber_1/geometry/setYLength 38299.9 um
/gate/absorber_1/geometry/setZLength 1499.9 um
/gate/absorber_1/placement/setTranslation 0. 0. -337.5 um
/gate/absorber_1/setMaterial {material}
/gate/absorber_1/vis/setColor grey

/gate/simplified/daughters/name gap_2
/gate/simplified/daughters/insert box
/gate/gap_2/geometry/setXLength 38900.  um
/gate/gap_2/geometry/setYLength 38299.9 um
/gate/gap_2/geometry/setZLength   74.9 um
/gate/gap_2/placement/setTranslation 0. 0. 360. um
/gate/gap_2/setMaterial Air
/gate/gap_2/vis/setVisible false

/gate/simplified/daughters/name absorber_2
/gate/simplified/daughters/insert box
/gate/absorber_2/geometry/setXLength 38900.  um
/gate/absorber_2/geometry/setYLength 38299.9 um
/gate/absorber_2/geometry/setZLength 1499.9 um
/gate/absorber_2/placement/setTranslation 0. 0. 1237.5 um
/gate/absorber_2/setMaterial {material}
/gate/absorber_2/vis/setColor grey

/gate/layer/repeaters/insert genericRepeater
/gate/layer/genericRepeater/setPlacementsFilename geometry/simplified.placements

/gate/simplified/repeaters/insert linear
/gate/simplified/linear/setRepeatNumber 40
/gate/simplified/linear/setRepeatVector 0. 0. 3975. um
